PsychoPy2experiment version="3.0.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  color = $[1.000,1.000,1.000]
  expName = experiment2_b
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Routines
  Routine Instruction_Intro
    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent lub
      image = Images/Instruction_Screen.png
      size = (2, 2)
      startVal [time (s)] = 0.0
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  Routine Exposure
    TextComponent Instr
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.08
      opacity = 0.95
      pos = (0, 0.8)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text = Say the words you see out loud
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    ImageComponent Sing_img
      image [set every repeat] = $Picture
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Pl_img
      image [set every repeat] = $Picture_pl
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
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    TextComponent Sing_txt
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Singular
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    TextComponent Pl_txt
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0, -0.5)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
      text [set every repeat] = $Plural
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  Routine Instruction_Prod
    ImageComponent image_3
      image = Images/Instruction_Screen_Prod.png
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test_Prod
    TextComponent Trigger_ins1
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Read the word out loud
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    TextComponent Target_ins1
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 5
      text = Write down the singular form - then press ENTER
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    ImageComponent Trigger_img1
      image [set every repeat] = $Trigger_img
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent Target_img1
      image [set every repeat] = $Target_img
      startVal [time (s)] = 5
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    TextComponent Trigger_txt1
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $Trigger_txt
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    CodeComponent textinput
      Code Type = Py
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        txtinp.alignHoriz ='center'
      Each Frame:
        n= len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == 'return' and len(inputText) >1:
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1]  # lose the final character
                i = i + 1

            elif theseKeys[i] == 'space':
                inputText += ' '
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]

                i = i + 1
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('inputText', inputText)
        inputText=""
    TextComponent txtinp
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0, -0.5)
      startVal [time (s)] = 5
      text [set every frame] = $inputText
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    KeyboardComponent text_resp
      forceEndRoutine = False
      startVal [time (s)] = 5
      store = all keys
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  Routine ISI_1sec
    StaticComponent ISI_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
  Routine Instruction_FC
    ImageComponent image_6
      image = Images/Instruction_Screen_FC.png
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test_FC
    TextComponent Trigger_ins2
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Repeat the word you see
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    TextComponent Target_ins2
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      pos = (0, 0.8)
      startVal [time (s)] = 4
      text = Choose the form of the singular you believe is found in the language
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    ImageComponent Trigger_img2
      image [set every repeat] = $Trigger_img
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent Target_img2
      image [set every repeat] = $Target_img
      startVal [time (s)] = 4
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    TextComponent Trigger_txt2
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $Trigger_txt
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    TextComponent Target_instr_l
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.08
      pos = (-0.5, -0.8)
      startVal [time (s)] = 4
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      text:
        Press a
    TextComponent Target_instr_r
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.08
      pos = (0.5, -0.7)
      startVal [time (s)] = 4
      text = Press k
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    KeyboardComponent FC_resp
      allowedKeys = 'a','k'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    TextComponent Resp_a
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (-0.5, -0.5)
      startVal [time (s)] = 4
      text [set every repeat] = $Corr
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    TextComponent Resp_b
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0.5, -0.5)
      startVal [time (s)] = 4
      text [set every repeat] = $Incorr
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  Routine Exposure_2
    ImageComponent image
      image [set every repeat] = $Picture
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Exposure_3
    ImageComponent image_2
      image [set every repeat] = $Picture_pl
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine Instruction_Intro
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = Lists/Experiment_Word_list_voicing.xlsx
    loopType = random
    nReps = 1
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    Routine Exposure
    Routine ISI_1sec
  LoopTerminator trials
  Routine Instruction_Prod
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 0:1
    conditionsFile = Lists\Prod_voicing.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Trigger_txt', 'musapu'), ('Target_txt', 'musab'), ('Test_cond', 0), ('New_seg', 0), ('Filler', 0), ('Target_img', 'Images/apple.jpg'), ('Trigger_img', 'Images/apple_pl.jpg')]),
      OrderedDict([('Trigger_txt', 'larupu'), ('Target_txt', 'larub'), ('Test_cond', 0), ('New_seg', 0), ('Filler', 0), ('Target_img', 'Images/rock.jpg'), ('Trigger_img', 'Images/rock_pl.jpg')]),
      OrderedDict([('Trigger_txt', 'rumutu'), ('Target_txt', 'rumud'), ('Test_cond', 0), ('New_seg', 0), ('Filler', 0), ('Target_img', 'Images/river.jpg'), ('Trigger_img', 'Images/river_pl.jpg')]),
      OrderedDict([('Trigger_txt', 'limiku'), ('Target_txt', 'limig'), ('Test_cond', 0), ('New_seg', 0), ('Filler', 0), ('Target_img', 'Images/screwdriver.jpg'), ('Trigger_img', 'Images/screwdriver_pl.jpg')]),
      OrderedDict([('Trigger_txt', 'nalipu'), ('Target_txt', 'nalib'), ('Test_cond', 0), ('New_seg', 0), ('Filler', 0), ('Target_img', 'Images/coin.jpg'), ('Trigger_img', 'Images/coin_pl.jpg')]),
      OrderedDict([('Trigger_txt', 'ranutu'), ('Target_txt', 'ranud'), ('Test_cond', 0), ('New_seg', 0), ('Filler', 0), ('Target_img', 'Images/carpet.jpg'), ('Trigger_img', 'Images/carpet_pl.jpg')]),
      OrderedDict([('Trigger_txt', 'rimuku'), ('Target_txt', 'rimug'), ('Test_cond', 0), ('New_seg', 0), ('Filler', 0), ('Target_img', 'Images/door.jpg'), ('Trigger_img', 'Images/door_pl.jpg')])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
    Routine Test_Prod
    Routine ISI_1sec
  LoopTerminator trials_2
  Routine Instruction_FC
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = Lists\FC_voicing.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Trigger_txt', 'musapu'), ('Corr', 'musab'), ('Incorr', 'musap'), ('Test_cond', 0), ('New_seg', 0), ('Filler', 0), ('Target_img', 'Images/apple.jpg'), ('Trigger_img', 'Images/apple_pl.jpg')]),
      OrderedDict([('Trigger_txt', 'larupu'), ('Corr', 'larub'), ('Incorr', 'larup'), ('Test_cond', 0), ('New_seg', 0), ('Filler', 0), ('Target_img', 'Images/rock.jpg'), ('Trigger_img', 'Images/rock_pl.jpg')]),
      OrderedDict([('Trigger_txt', 'rumutu'), ('Corr', 'rumud'), ('Incorr', 'rumut'), ('Test_cond', 0), ('New_seg', 0), ('Filler', 0), ('Target_img', 'Images/river.jpg'), ('Trigger_img', 'Images/river_pl.jpg')]),
      OrderedDict([('Trigger_txt', 'limiku'), ('Corr', 'limig'), ('Incorr', 'limik'), ('Test_cond', 0), ('New_seg', 0), ('Filler', 0), ('Target_img', 'Images/screwdriver.jpg'), ('Trigger_img', 'Images/screwdriver_pl.jpg')]),
      OrderedDict([('Trigger_txt', 'nalipu'), ('Corr', 'nalib'), ('Incorr', 'nalip'), ('Test_cond', 0), ('New_seg', 0), ('Filler', 0), ('Target_img', 'Images/coin.jpg'), ('Trigger_img', 'Images/coin_pl.jpg')]),
      OrderedDict([('Trigger_txt', 'ranutu'), ('Corr', 'ranud'), ('Incorr', 'ranut'), ('Test_cond', 0), ('New_seg', 0), ('Filler', 0), ('Target_img', 'Images/carpet.jpg'), ('Trigger_img', 'Images/carpet_pl.jpg')]),
      OrderedDict([('Trigger_txt', 'rimuku'), ('Corr', 'rimug'), ('Incorr', 'rimuk'), ('Test_cond', 0), ('New_seg', 0), ('Filler', 0), ('Target_img', 'Images/door.jpg'), ('Trigger_img', 'Images/door_pl.jpg')])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
    Routine Test_FC
    Routine ISI_1sec
  LoopTerminator trials_3
